CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Treatment>[A-Za-z0-9.]+)_(?P<CellType>[A-Za-z0-9]+)_.*_\d{3}_(?P<Position>\d+)_z\d+(?:_(?P<ImageType>cell_mask|nucleus_mask))?\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does C "0") (metadata does ImageType "None")
    Name to assign these images:p62
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "1") (metadata does ImageType "None")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "2") (metadata does ImageType "None")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ImageType "cell_mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ImageType "nucleus_mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:G3BP1
    Name the output image:G3BP1_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:6|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
    Select the input image:p62
    Name the output image:p62_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:7|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
    Select the input image:DNA
    Name the output image:DNA_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

MaskObjects:[module_num:8|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
    Select objects to be masked:Cells
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Cells, Cytoplasm, Nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:G3BP1_masked, p62_masked
    Select objects to measure:Cells, Cytoplasm

MeasureObjectIntensity:[module_num:11|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enabled:False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
    Select images to measure:DNA_masked
    Select objects to measure:Nucleus

MeasureColocalization:[module_num:12|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
    Select images to measure:G3BP1_masked, p62_masked
    Set threshold as percentage of maximum intensity for the images:3
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|B15_20260817
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|AreaShape_ConvexArea,Cells|AreaShape_MajorAxisLength,Cells|AreaShape_Zernike_3_1,Cells|AreaShape_Zernike_3_3,Cells|AreaShape_Zernike_7_3,Cells|AreaShape_Zernike_7_1,Cells|AreaShape_Zernike_7_5,Cells|AreaShape_Zernike_7_7,Cells|AreaShape_Zernike_9_9,Cells|AreaShape_Zernike_9_3,Cells|AreaShape_Zernike_9_7,Cells|AreaShape_Zernike_9_5,Cells|AreaShape_Zernike_9_1,Cells|AreaShape_Zernike_4_0,Cells|AreaShape_Zernike_4_2,Cells|AreaShape_Zernike_4_4,Cells|AreaShape_Zernike_5_3,Cells|AreaShape_Zernike_5_1,Cells|AreaShape_Zernike_5_5,Cells|AreaShape_Zernike_1_1,Cells|AreaShape_Zernike_8_8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DCP1A_p62_data_0817_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
