CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Treatment>[A-Za-z0-9.]+)_(?P<CellType>[A-Za-z0-9]+)_.*_\d{3}_(?P<Position>\d+)_z\d+(?:_(?P<ImageType>cell_mask|nucleus_mask))?\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0") (file doesnot contain "mask")
    Name to assign these images:p62
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1") (file doesnot contain "mask")
    Name to assign these images:DCP1A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2") (file doesnot contain "mask")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ImageType "cell_mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ImageType "nucleus_mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:DCP1A
    Name the output image:DCP1A_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:6|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
    Select the input image:p62
    Name the output image:p62_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:7|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
    Select the input image:DNA
    Name the output image:DNA_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

MaskObjects:[module_num:8|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
    Select objects to be masked:Cells
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DCP1A_masked, p62_masked
    Select objects to measure:Cells, Cytoplasm

MeasureGranularity:[module_num:10|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
    Select images to measure:DCP1A_masked, p62_masked
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:20
    Range of the granular spectrum:14

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:DCP1A_masked, p62_masked
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:DCP1A_masked, p62_masked
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
RescaleIntensity:[module_num:13|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
    Select the input image:DCP1A_masked
    Name the output image:DCP1A_rescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.02,0.2
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:14|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
    Select the input image:p62_masked
    Name the output image:p62_rescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.01,0.2
    Intensity range for the output image:0.0,1.0
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
MeasureTexture:[module_num:15|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
    Select images to measure:DCP1A_rescale, p62_rescale
    Select objects to measure:Cells, Cytoplasm
    Enter how many gray levels to measure the texture at:32
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:4

MeasureColocalization:[module_num:16|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
    Select images to measure:DCP1A_masked, p62_masked
    Set threshold as percentage of maximum intensity for the images:3
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Texture_DifferenceEntropy_DCP1A_rescale_3_01_32,Cytoplasm|Texture_DifferenceEntropy_DCP1A_rescale_3_00_32,Cytoplasm|Texture_DifferenceEntropy_DCP1A_rescale_3_03_32,Cytoplasm|Texture_DifferenceEntropy_DCP1A_rescale_3_02_32,Cytoplasm|Texture_DifferenceEntropy_p62_rescale_3_02_32,Cytoplasm|Texture_DifferenceEntropy_p62_rescale_3_00_32,Cytoplasm|Texture_DifferenceEntropy_p62_rescale_3_03_32,Cytoplasm|Texture_DifferenceEntropy_p62_rescale_3_01_32,Cytoplasm|Texture_InfoMeas2_p62_rescale_3_00_32,Cytoplasm|Texture_InfoMeas2_p62_rescale_3_01_32,Cytoplasm|Texture_InfoMeas2_p62_rescale_3_02_32,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:B15_DCP1A_p62_data_0820_
    Overwrite existing files without warning?:Yes
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