CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Round>\d{8}_\d{6}_\d{3})_.*Wells-(?P<Wells>[A-Za-z0-9]+)_Points-(?P<Points>\d+)_.*(?:_(?P<ImageType>cell_mask|nucleus_mask))?\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does C "0") (metadata does ImageType "None")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "1") (metadata does ImageType "None")
    Name to assign these images:CENPA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "2") (metadata does ImageType "None")
    Name to assign these images:ACA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell_mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "nucleus_mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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    Select the rule criteria:or (metadata does C "3") (metadata does ImageType "None")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:ACA
    Name the output image:ACA_nucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

MaskImage:[module_num:6|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
    Select the input image:CENPA
    Name the output image:CENPA_nucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

MaskObjects:[module_num:7|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
    Select objects to be masked:Cells
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Cells
    Name the output objects:cells_expanded_1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:cells_expanded_1
    Name the output objects:cells_expanded
    Select the operation:Expand objects until touching
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
MaskObjects:[module_num:10|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
    Select objects to be masked:cells_expanded
    Name the masked objects:cells_background
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:CENPA_nucleus
    Name the output image:CENPA_granules
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:ACA_nucleus
    Name the output image:ACA_granules
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:ACA_granules
    Name the primary objects to be identified:Centromere_ACA
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:CENPA_granules
    Name the primary objects to be identified:Centromere_CENPA
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:CENPA
    Select objects to measure:Centromere

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:Centromere
    Name the output objects:Centromere_shirnk
    Select the operation:Shrink objects by a previous measurement
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    Fill holes in objects so that all objects shrink to a single point?:No
    Expand or shrink measurement:Threshold_OrigThreshold_Centromere

MaskObjects:[module_num:17|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
    Select objects to be masked:Nucleus
    Name the masked objects:np
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Centromere
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:ACA, CENPA
    Select objects to measure:Cells, Centromere, Cytoplasm, Nucleus, cells_background, np

RelateObjects:[module_num:19|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
    Parent objects:Nucleus
    Child objects:Centromere
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nucleus|Intensity_MinIntensityEdge_CENPA,Nucleus|Intensity_MinIntensityEdge_ACA,Nucleus|Intensity_LowerQuartileIntensity_ACA,Nucleus|Intensity_LowerQuartileIntensity_CENPA,Nucleus|Intensity_StdIntensityEdge_ACA,Nucleus|Intensity_StdIntensityEdge_CENPA,Nucleus|Intensity_MaxIntensity_CENPA,Nucleus|Intensity_MaxIntensity_ACA,Nucleus|Intensity_MinIntensity_ACA,Nucleus|Intensity_MinIntensity_CENPA,Nucleus|Intensity_MeanIntensityEdge_CENPA,Nucleus|Intensity_MeanIntensityEdge_ACA,Nucleus|Intensity_StdIntensity_ACA,Nucleus|Intensity_StdIntensity_CENPA,Nucleus|Intensity_UpperQuartileIntensity_CENPA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A15_data_
    Overwrite existing files without warning?:Yes
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