CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Round>\d{8}_\d{6}_\d{3})_.*Wells-(?P<Wells>[A-Za-z0-9]+)_Points-(?P<Points>\d+)_.*(?:_(?P<ImageType>cell_mask|nucleus_mask))?\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does C "0") (metadata does ImageType "None")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "1") (metadata does ImageType "None")
    Name to assign these images:CENPA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "2") (metadata does ImageType "None")
    Name to assign these images:ACA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell_mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "nucleus_mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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    Select the rule criteria:or (metadata does C "3") (metadata does ImageType "None")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FilterObjects:[module_num:5|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
    Select the objects to filter:Cells
    Name the output objects:Cells_filtered
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
FilterObjects:[module_num:6|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
    Select the objects to filter:Nucleus
    Name the output objects:Nucleus_filtered
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MaskImage:[module_num:7|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
    Select the input image:ACA
    Name the output image:ACA_nucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus_filtered
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    Invert the mask?:No

MaskImage:[module_num:8|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
    Select the input image:CENPA
    Name the output image:CENPA_nucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus_filtered
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    Invert the mask?:No

MaskObjects:[module_num:9|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
    Select objects to be masked:Cells_filtered
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus_filtered
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:Cells
    Name the output objects:cells_expanded_1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:cells_expanded_1
    Name the output objects:cells_expanded
    Select the operation:Expand objects until touching
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
MaskObjects:[module_num:12|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
    Select objects to be masked:cells_expanded
    Name the masked objects:cells_background
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:cells_expanded_1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:ACA_nucleus
    Name the output image:ACA_granules
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:ACA_granules
    Name the primary objects to be identified:Centromere_ACA
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:15|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
    Select objects to be masked:Nucleus_filtered
    Name the masked objects:NP_by_ACA
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Centromere_ACA
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:16|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
    Parent objects:Cells_filtered
    Child objects:Nucleus_filtered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nucleus_related
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
RelateObjects:[module_num:17|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
    Parent objects:Cells_filtered
    Child objects:NP_by_ACA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NP_related
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
MeasureObjectIntensity:[module_num:18|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
    Select images to measure:ACA, CENPA
    Select objects to measure:Cells_filtered, Centromere_ACA, Cytoplasm, NP_related, Nucleus_related, cells_background

RelateObjects:[module_num:19|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
    Parent objects:Nucleus_related
    Child objects:Centromere_ACA
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Centromere_ACA|Intensity_StdIntensityEdge_CENPA,Centromere_ACA|Intensity_StdIntensityEdge_ACA,Centromere_ACA|Intensity_IntegratedIntensityEdge_ACA,Centromere_ACA|Intensity_IntegratedIntensityEdge_CENPA,Centromere_ACA|Intensity_MinIntensity_CENPA,Centromere_ACA|Intensity_MinIntensity_ACA,Centromere_ACA|Intensity_MassDisplacement_ACA,Centromere_ACA|Intensity_MassDisplacement_CENPA,Centromere_ACA|Intensity_MeanIntensityEdge_CENPA,Centromere_ACA|Intensity_MeanIntensityEdge_ACA,Centromere_ACA|Intensity_MADIntensity_ACA,Centromere_ACA|Intensity_MADIntensity_CENPA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A16_data_
    Overwrite existing files without warning?:Yes
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