CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Add both image_data/B2/Hela and image_data/B2/Hela_masks to the file list in the GUI (drag folders onto the Images panel).']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
    :Images only
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['VERIFY this regex against your real filenames (e.g. AS1h_Hela_DAPI_488eif3p_576G3BP1_001.tif and AS1h_Hela_DAPI_488eif3p_576G3BP1_001_mask.tif) using the regex tester in the GUI before running.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^MAX_(?P<Treatment>[A-Za-z0-9]+)_(?P<CellType>[A-Za-z0-9]+)_.*_(?P<Position>\d{3})(?:_(?P<ImageType>cell_mask|nucleus_mask))?\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:["This is the trickiest module to hand-author. Open it in the GUI and click Update to confirm the image set list pairs each raw stack's 3 frames with its matching _mask.tif correctly by Condition+Site before proceeding. Frame indices assume channel order [0]=G3BP1 [1]=eIF3p [2]=DAPI as written in make_masks.py."]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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:file does contain ""
    Name to assign these images:image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does ImageType "None") (metadata does C "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "cell_mask")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "nucleus_mask")
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    Name to assign these objects:nucleus
    Select the image type:Objects
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    Select the rule criteria:or (metadata does C "0") (metadata does ImageType "None")
    Name to assign these images:p62
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "1") (metadata does ImageType "None")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:G3BP1
    Name the output image:Illumgreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:G3BP1
    Name the output image:Corr_G3BP1
    Select the illumination function:Illumgreen
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:p62
    Name the output image:Illumred
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:p62
    Name the output image:Corr_p62
    Select the illumination function:Illumred
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:p62
    Name the output image:Illumred_granules
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:p62
    Name the output image:Corr_p62_granules
    Select the illumination function:Illumred_granules
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:G3BP1
    Name the output image:Illumgreen_granules
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:G3BP1
    Name the output image:Corr_p62_granules
    Select the illumination function:Illumgreen_granules
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MaskImage:[module_num:12|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notes:["Zeroes out G3BP1 signal outside segmented cells so background/debris can't be called as granules."]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
    Select the input image:G3BP1
    Name the output image:G3BP1_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:13|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notes:['Same masking for eIF3p so its intensity measurements inside granules/cells are also background-clean.']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
    Select the input image:p62
    Name the output image:p62_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:14|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
    Select the input image:DNA
    Name the output image:DNA_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:nucleus
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    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:Cells
    Name the masked objects:cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:G3BP1_masked, p62_masked
    Select objects to measure:Cells, cytoplasm

MeasureColocalization:[module_num:17|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
    Select images to measure:Corr_G3BP1, Corr_p62
    Set threshold as percentage of maximum intensity for the images:3.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, cytoplasm
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|B2_20260801
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:granules|Parent_Cells,granules|AreaShape_Zernike_0_0,granules|AreaShape_Zernike_3_1,granules|AreaShape_Zernike_3_3,granules|AreaShape_Zernike_1_1,granules|AreaShape_Zernike_5_5,granules|AreaShape_Zernike_5_3,granules|AreaShape_Zernike_5_1,granules|AreaShape_Zernike_9_5,granules|AreaShape_Zernike_9_7,granules|AreaShape_Zernike_9_3,granules|AreaShape_Zernike_9_9,granules|AreaShape_Zernike_9_1,granules|AreaShape_Zernike_8_4,granules|AreaShape_Zernike_8_8,granules|AreaShape_Zernike_8_0,granules|AreaShape_Zernike_8_2,granules|AreaShape_Zernike_8_6,granules|AreaShape_Zernike_4_4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:B2_output_Hela_0801_
    Overwrite existing files without warning?:No
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